PsychoPy2experiment version="3.0.0b7"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  expName = AggPrototype
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Routines
  Routine InstructionConditioning
    TextComponent ICText
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        You will soon see pictures of the faces of the other players.

        They will take first turn to administer low voltage shocks to you.

        The order is randomised and they can either give you ONE or TWO shocks.

        Press 'Spacebar' to continue
    KeyboardComponent ICContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Conditioning
    ImageComponent ConditionImages
      image [set every repeat] = $ImageFile
      size = (360, 450)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 2
      units = pix
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  Routine InstructionRetaliation
    TextComponent IRText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        It is now your turn to return shocks to the other players

        Use the NumPad
        Press '0' for NO shocks
        Press '1' for ONE shock
        Press '2' for TWO shocks

        Press 'Spacebar' when you are ready to continue
    KeyboardComponent IRContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Retaliation
    ImageComponent RetaliationImages
      image [set every repeat] = $ImageFile
      size = (360, 450)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 9.25
      units = pix
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    TextComponent RetaliationReminder
      letterHeight = 0.08
      pos = (0, -0.6)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 9.4
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      text:
        Press '0' for NO shocks
        Press '1' for ONE shock
        Press '2' for TWO shocks
    KeyboardComponent RetaliationKey
      allowedKeys = 'num_0','num_1','num_2'
      forceEndRoutine = False
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 9.25
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    ImageComponent Shock0
      image = images/shock0.png
      pos = (0, 0.5)
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent Shock1
      image = images/Shock1.png
      pos = (0, 0.5)
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent Shock2
      image = images/Shock2.png
      pos = (0, 0.5)
      size = (0.08, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        Shock0.opacity = 0 #start shock0 invisible
        Shock1.opacity = 0 #start shock1 invisible
        Shock2.opacity = 0 #start shock2 invisible
      Each Frame:
        if 'num_0' == RetaliationKey.keys: # if down key pushed,
            Shock0.opacity = 1.0 # make shock0 appear
            Shock1.opacity = 0 # make shock1 invisible
            Shock2.opacity = 0 # make shock2 invisible
        elif 'num_1' == RetaliationKey.keys: # if left key is pushed
            Shock1.opacity = 1.0 # make shock1 appear
            Shock0.opacity = 0 # make shock0 invisible
            Shock2.opacity = 0 # make shock2 invisible
        elif 'num_2' == RetaliationKey.keys: # if right key is pushed
            Shock2.opacity = 1.0 # make shock2 appear
            Shock0.opacity = 0 # make shock0 invisible
            Shock1.opacity = 0 # make shock1 invisible
  Routine WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please have a seat


        Press 'Spacebar' to continue
    KeyboardComponent WelcomeContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating

        Please contact the researcher
  Routine Blank500
    TextComponent BlankText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine FixCross
    PolygonComponent Cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine codeInit
    CodeComponent codeStart
      Code Type = Py
      Begin Experiment:
        #import getkey

        #if opacity is not None:
         #   opacity = float(opacity)
  Routine RConnect
    TextComponent WaitingText
      letterHeight = 0.12
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Waiting for players...
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    TextComponent P1
      letterHeight = 0.08
      pos = (-0.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P1
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    TextComponent P2
      letterHeight = 0.08
      pos = (-0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P2
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    TextComponent User
      letterHeight = 0.08
      pos = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P3 (you)
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    TextComponent P4
      letterHeight = 0.08
      pos = (0.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P4
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    PolygonComponent P1G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (-0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent P1R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (-0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    PolygonComponent P2G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (-0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 2
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    PolygonComponent P2R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (-0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent UserG
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    PolygonComponent P4G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 6
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    PolygonComponent P4R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine WelcomeScreen
  Routine Blank500
  Routine InstructionRetaliation
  Routine Blank500
  Routine RConnect
  LoopInitiator RetaliationLoop loopType="TrialHandler"
    conditionsFile = ImageFiles.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [OrderedDict([('ImageFile', 'images/Face1.jpg'), ('Shock', 0), ('ID', 1)]),
      OrderedDict([('ImageFile', 'images/Face2.jpg'), ('Shock', 1), ('ID', 2)]),
      OrderedDict([('ImageFile', 'images/Face3.jpg'), ('Shock', 2), ('ID', 3)])]
    Routine Blank500
    Routine FixCross
    Routine Retaliation
  LoopTerminator RetaliationLoop
  Routine EndScreen
