PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  Save wide csv file = False
  expName = 20140611_InpOut32_TriggerJackhammer
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    CodeComponent code
      Begin Experiment:
        from psychopy import parallel

        # Initialize trigger constants
        #port = parallel.PParallelInpOut32(address=0x0378)
        #port = parallel.PParallelDLPortIO(address=0x0378)
        port = parallel.ParallelPort(address=0x0378)
        hold_value = 0
        sleepdur = .1

        # Set port to hold value
        port.setData(hold_value)
        core.wait(sleepdur)

        # Initialize trigger value
        trigval = 0
      Begin Routine:
        # Update trigger value
        trigval = trigval + 1

        # Trigger parallel port.
        #port.setData(trigval)
        port.setPin(2, 1)
        port.setPin(3, 0)
        port.setPin(4, 0)
        port.setPin(5, 0)
        port.setPin(6, 0)
        port.setPin(7, 0)
        port.setPin(8, 0)
        port.setPin(9, 0)
        core.wait(sleepdur)
        #port.setData(hold_value)
        #core.wait(sleepdur)

        # Read the port.
        #displayval = port.readData()
        displayval = "0 = " + str(port.readPin(2)) + "\n1 = " + str(port.readPin(3)) + "\n2 = " + str(port.readPin(4)) + "\n3 = " + str(port.readPin(5)) + "\n4 = " + str(port.readPin(6)) + "\n5 = " + str(port.readPin(7)) + "\n6 = " + str(port.readPin(8)) + "\n7 = " + str(port.readPin(9))
    TextComponent text
      text [set every frame] = $displayval
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine trial
