PsychoPy2experiment version="3.0.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = AggPrototype
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Routines
  Routine Conditioning
    ImageComponent ConditionImages
      image [set every repeat] = $ImageFile
      size = (360, 450)
      startVal [time (s)] = 0.00
      stopVal [duration (s)] = 8
      units = pix
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    CodeComponent randomTimeCode
      Code Type = Py
      Begin Routine:
        randomTime = random.uniform(1.1, 5)
    TextComponent textZap
      color = red
      letterHeight = 0.3
      startVal [time (s)] = $randomTime
      stopVal [duration (s)] = 1.0
      text = Trigger pressed!
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    CodeComponent STM200
      Code Type = Py
      Each Frame:
        from __future__ import absolute_import, division, print_function

        from builtins import *  # @UnusedWildImport
        from mcculw import ul
        from mcculw.ul import ULError

        from examples.console import util
        from examples.props.ao import AnalogOutputProps


        use_device_detection = True


        def run_example():
            board_num = 0

            if use_device_detection:
                ul.ignore_instacal()
                if not util.config_first_detected_device(board_num):
                    print("Could not find device.")
                    return

            channel = 0

            ao_props = AnalogOutputProps(board_num)
            if ao_props.num_chans < 1:
                util.print_unsupported_example(board_num)
                return

            ao_range = ao_props.available_ranges[0]

            data_value = ao_range.range_max / 2

            try:
                print(
                    "Outputting " + str(data_value) + " Volts to channel "
                    + str(channel) + ".")
                # Send the value to the device (optional parameter omitted)
                ul.v_out(board_num, channel, ao_range, data_value)
            except ULError as e:
                util.print_ul_error(e)
            finally:
                if use_device_detection:
                    ul.release_daq_device(board_num)


        if __name__ == '__main__':
            run_example()
  Routine WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Part 2: Start of Pairing experiment
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    KeyboardComponent WelcomeContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WelcomeProceed
      letterHeight = 0.1
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Press 'Spacebar' to continue
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  Routine EndScreen
    TextComponent EndText
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating.
        The last phase will begin shortly.

        Please contact the staff to assist you.
  Routine Blank500
    TextComponent BlankText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine FixCross
    PolygonComponent Cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine InstructionConditioning1
    TextComponent ICText1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = You will now see images of thoer players interacting with you in this experiment.
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    KeyboardComponent ICContinue1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ICProceed1
      letterHeight = 0.1
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Press 'Spacebar' to continue
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  Routine InstructionConditioning2
    TextComponent ICText2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This part of the experiment has two phases.

        One out of the four players will randomly be assigned to start the experiment.

        The selected payer will start the experiment first.

        In phase two the randomised selection will start all over again
    KeyboardComponent ICContinue2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ICProceed2
      letterHeight = 0.1
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Press 'Enter' when ready
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  Routine ConditioningStart
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You will participate simultaneously with four other players
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    TextComponent CSText
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text:
        YOU have been randomly selected to start the experiment
    KeyboardComponent CSContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent CSProceed
      letterHeight = 0.1
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Press 'Spacebar' when ready to start the session
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  Routine ICConnect
    TextComponent WaitingText
      letterHeight = 0.12
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Waiting for the randomised assignment 
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    TextComponent P1
      letterHeight = 0.08
      pos = (-0.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = P1
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    TextComponent P2
      letterHeight = 0.08
      pos = (-0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = P2
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    TextComponent User
      letterHeight = 0.08
      pos = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = P3 (YOU)
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    TextComponent P4
      letterHeight = 0.08
      pos = (0.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = P4
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    PolygonComponent P1G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (-0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent P2R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (-0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent P2G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (-0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    PolygonComponent UserG
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent P4R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    PolygonComponent P4G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 3.5
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  Routine codeInit
    CodeComponent codeInitStart
      Code Type = Py
      Begin Experiment:
        import random

        #randomise the seed
        random.seed()
Flow
  Routine codeInit
  Routine WelcomeScreen
  Routine Blank500
  Routine InstructionConditioning1
  Routine Blank500
  Routine InstructionConditioning2
  Routine Blank500
  Routine ICConnect
  Routine Blank500
  Routine ConditioningStart
  LoopInitiator ConditioningLoop loopType="TrialHandler"
    conditionsFile = ImageFiles.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [OrderedDict([('ImageFile', 'images/Face1.jpg')]),
      OrderedDict([('ImageFile', 'images/Face2.jpg')]),
      OrderedDict([('ImageFile', 'images/Face3.jpg')])]
    Routine Blank500
    Routine FixCross
    Routine Conditioning
  LoopTerminator ConditioningLoop
  Routine EndScreen
