PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  expName = AggPrototype
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Routines
  Routine InstructionConditioning
    TextComponent ICText
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        You will soon see pictures of the faces of the other players.

        They will take first turn to administer low voltage shocks to you.

        The order is randomised and they can either give you ONE or TWO shocks.

        Press 'Spacebar' to continue
    KeyboardComponent ICContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Conditioning
    ImageComponent ConditionImages
      image [set every repeat] = $ImageFile
      size = (360, 450)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 2
      units = pix
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  Routine Retaliation
    ImageComponent RetaliationImages
      image [set every repeat] = $ImageFile
      size = (360, 450)
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 7.75
      units = pix
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    TextComponent RetaliationReminder
      letterHeight = 0.08
      pos = (0, -0.6)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 5.00
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      text:
        Press '0' for NO shocks
        Press '1' for ONE shock
        Press '2' for TWO shocks
    KeyboardComponent RetaliationKey
      allowedKeys = 'num_0','num_1','num_2'
      forceEndRoutine = False
      startVal [time (s)] = 0.75
      stopVal [duration (s)] = 7.25
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  Routine WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Phase 3:

        Press 'Spacebar' to continue
    KeyboardComponent WelcomeContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
    TextComponent EndText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for the participation

        Please contact the researcher
  Routine Blank500
    TextComponent BlankText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine FixCross
    PolygonComponent Cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine codeInit
    CodeComponent codeStart
      Code Type = Py
      Begin Experiment:
        #import getkey

        #if opacity is not None:
         #   opacity = float(opacity)
  Routine RConnect
    TextComponent WaitingText
      letterHeight = 0.12
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Waiting for the participants...
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    TextComponent P1
      letterHeight = 0.08
      pos = (-0.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P1
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    TextComponent P2
      letterHeight = 0.08
      pos = (-0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P2
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    TextComponent User
      letterHeight = 0.08
      pos = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P3 (YOU)
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    TextComponent P4
      letterHeight = 0.08
      pos = (0.6, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = P4
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    PolygonComponent P1G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (-0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 2.5
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    PolygonComponent P1R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (-0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    PolygonComponent P2G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (-0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 2
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    PolygonComponent P2R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (-0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    PolygonComponent UserG
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (0.2, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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    PolygonComponent P4G
      fillColor = green
      lineColor = black
      nVertices = 16
      pos = (0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 6
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    PolygonComponent P4R
      fillColor = red
      lineColor = black
      nVertices = 16
      pos = (0.6, -0.1)
      shape = regular polygon...
      size = (0.09, 0.14)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Instruction1
    TextComponent IRText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In the next screen, the program will randomly select one of you to start the interaction
    KeyboardComponent IRContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SelectionConfirmation
    TextComponent Selection
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have been assigned to give shocks to the other three participants

        Press the spacebar to continue!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionShockDelivery
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        How to deliver shocks:

        Use the NumPad
        Press '0' for ZERO shocks
        Press '1' for ONE shock
        Press '2' for TWO shocks

        Press the'Spacebar' when you are ready to continue
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Blank500
  Routine Instruction1
  Routine Blank500
  Routine RConnect
  Routine SelectionConfirmation
  Routine InstructionShockDelivery
  LoopInitiator RetaliationLoop loopType="TrialHandler"
    conditionsFile = ImageFiles.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [OrderedDict([('ImageFile', 'images/Face1.jpg'), ('Shock', 0), ('ID', 1)]),
      OrderedDict([('ImageFile', 'images/Face2.jpg'), ('Shock', 1), ('ID', 2)]),
      OrderedDict([('ImageFile', 'images/Face3.jpg'), ('Shock', 2), ('ID', 3)])]
    Routine Blank500
    Routine FixCross
    Routine Retaliation
  LoopTerminator RetaliationLoop
  Routine EndScreen
